PsychoPy2experiment version="3.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant'], expName, expInfo['date'])
  Experiment info = {'Participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1366, 768]
  color = $[-1.000,-1.000,-1.000]
  expName = BananaMonkey
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Routines
  Routine Game
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        spin = 0
        TitleW = 0
        TitleH = 0
        xpos = 0
        ypos = -0.5
        Bhoz = 0
        Bver = 1.5
        splatpos = 2
        SadFace = 0
        HappyFace = 0
        munch = 0
        splat = 0
        count = 0
        banana_op =1
        splat_op = 0
        lim_inf = -1.6
        SPEED = 0.02
        number_corrects = 0
        plus_ = 0.0025
        penalty_ = 0.01

        speeds_ = []
        trials_done = []
      Begin JS Experiment:
        spin = 0;
        TitleW = 0;
        TitleH = 0;
        xpos = 0;
        ypos = (- 0.5);
        Bhoz = 0;
        Bver = 1.5;
        splatpos = 2;
        SadFace = 0;
        HappyFace = 0;
        munch = 0;
        splat = 0;
        count = 0;
        banana_op = 1;
        splat_op = 0;
        lim_inf = (- 1.6);
        SPEED = 0.02;
        number_corrects = 0;
        plus = 0.0025;
        penalty = 0.01;

        speeds = [];
        trials_done = [];
      Begin JS Routine:
        timer = new util.Clock();


        function randomIntFromInterval(min, max) { // min and max included
          return Math.floor(Math.random() * (max - min + 1) + min)
        }

        const rndInt = randomIntFromInterval((-8), 9)



        xpos = 0;
        ypos = -0.5;
        Bhoz = (0.1 * rndInt);
        Bver = 1.5;
        splatpos = 2;
        SadFace = 0;
        HappyFace = 0;
        munch = 0;
        splat = 0;
        count = 0;
        banana_op = 1;
        splat_op = 0;
        correct_trial = 0;
      Begin Routine:
        timer = core.Clock()
        xpos = 0
        ypos = -0.5
        Bhoz = 0.1*(randint(-8,9))
        Bver = 1.5
        splatpos = 2
        SadFace = 0
        HappyFace = 0
        munch = 0
        splat = 0
        count = 0
        banana_op = 1
        splat_op = 0
        correct_trial = 0
      Each Frame:
        #set the monkey to move with the mouse#
        xpos = (MonkeyMouse.getPos()[0])

        #tell the banana to drop at a rate on 0.02 units between 7 and 25 secs#
        if (0.1 < timer.getTime() < 60):
            Bver = Bver - SPEED
        else:
            Bver = 1.5



        #what to do if the banana overlaps the monkey#
        if (( -0.6 < Bver < -0.5) and ((xpos-0.2) <= Bhoz <= (xpos+0.2))):
            HappyFace = 1
            munch =  1
            #SPEED = SPEED + 0.01
            #Bver = 1.4
            #Bhoz = 0.1*(randint(-8,9))
            banana_op = 0
            correct_trial=1





        if ((-0.6< Bver < -0.5) and ( Bhoz>(xpos+0.2))):
             splatpos = Bhoz
             splat_op = 1
             splat =  1
             SadFace = 1
             #Bver = 1.4
             #Bhoz = 0.1*(randint(-8,9))
             banana_op = 0


        if ((-0.6 < Bver < -0.5) and ( Bhoz < (xpos-0.2))):
             splatpos = Bhoz
             splat_op = 1
             splat =  1
             SadFace = 1
             banana_op = 0



        if Bver < -0.6:
            splat_op = 0
            banana_op = 0



        if Bver <lim_inf:
            if timer.getTime() >1:
                continueRoutine = False
                #print('trial done')
                #print(SPEED)


        #set final chat #
        FinalChat = f'Well done! \n You helped the monkey eat \n {munch} bananas!'

        #if (timer.getTime()>=60):
        #    continueRoutine = False
      Each JS Frame:
        xpos = MonkeyMouse.getPos()[0];



        if (((0.1 < timer.getTime()) && (timer.getTime() < 60))) {
            Bver = (Bver - SPEED);
        } else {
            Bver = 1.5;
        }



        if (((((- 0.6) < Bver) && (Bver < (- 0.5))) && (((xpos - 0.2) <= Bhoz) && (Bhoz <= (xpos + 0.2))))) {
            HappyFace = 1;
            munch = 1;
            banana_op = 0;
            correct_trial = 1;
        }


        if (((((- 0.6) < Bver) && (Bver < (- 0.5))) && (Bhoz > (xpos + 0.2)))) {
            splatpos = Bhoz;
            splat_op = 1;
            splat = 1;
            SadFace = 1;
            banana_op = 0;
        }



        if (((((- 0.6) < Bver) && (Bver < (- 0.5))) && (Bhoz < (xpos - 0.2)))) {
            splatpos = Bhoz;
            splat_op = 1;
            splat = 1;
            SadFace = 1;
            banana_op = 0;
        }




        if ((Bver < (- 0.6))) {
            splat_op = 0;
            banana_op = 0;
        }



        if ((Bver < lim_inf)) {
            if ((timer.getTime() > 1)) {
                continueRoutine = false;
            }
        }



        FinalChat = `Well done!
        You helped the monkey eat
        ${munch} bananas!`
        ;
      End Experiment:
        import numpy as np

        print(np.mean(speeds_)) ##mean speed -->the larger the better
        print(len(trials_done)) ##number of trials
        print(np.sum(trials_done))  ##number corrects
      End JS Routine:
        speeds.push(SPEED);

        trials_done.push(correct_trial);


        if ((correct_trial === 1)) {
            SPEED = (SPEED + plus);
            number_corrects = (number_corrects + 1);
        }

        if ((correct_trial === 0)) {
            SPEED = (SPEED - penalty);
        }


        const average = list => list.reduce((prev, curr) => prev + curr) / list.length;
        const list = speeds

        SPEED_SHOW_avg = average(list) * 1000

        SPEED_SHOW = SPEED_SHOW_avg.toFixed(2)
      End Routine:
        speeds_.append(SPEED)


        trials_done.append(correct_trial)

        if correct_trial == 1:
            SPEED = SPEED + plus_
            number_corrects=number_corrects + 1


        if correct_trial == 0:
            SPEED = SPEED - penalty_


        ##Feedback
        import numpy as np
        SPEED_SHOW = np.round(np.mean(speeds_),3)*1000
    MouseComponent MonkeyMouse
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0
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    ImageComponent Banana
      image = banana.png
      opacity [set every frame] = $banana_op
      pos [set every frame] = $(Bhoz,Bver)
      saveStartStop = False
      size = (0.15, 0.4)
      startVal [time (s)] = 0
      units = norm
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    ImageComponent SplatBanana
      image = bansplat.png
      opacity [set every frame] = $splat_op
      pos [set every frame] = $(splatpos,-0.5)
      saveStartStop = False
      size = (0.3, 0.4)
      startVal [time (s)] = 0
      units = norm
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    SoundComponent Munch
      saveStartStop = False
      sound [set every repeat] = munch.wav
      startVal [condition] = munch ==1
      volume [set every repeat] = 1
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    SoundComponent Splat
      durationEstim = 3
      saveStartStop = False
      sound = splat.wav
      startVal [condition] = splat == 1
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    ImageComponent MonkeyMouth
      image = monkey.png
      pos [set every frame] = $(xpos,ypos)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      units = norm
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    ImageComponent MonkeyHappy
      image = monkeymunch.png
      opacity [set every frame] = $HappyFace
      pos [set every frame] = $(xpos,ypos)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      units = norm
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    ImageComponent MonkeySad
      image = monkeyno.png
      opacity [set every frame] = $SadFace
      pos [set every frame] = $(xpos,ypos)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      units = norm
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  Routine Instructions
    TextComponent Bienvenida
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
                ¡Bienvenido a nuestro juego!

        Mueve al mono con el "mouse" para comerte todas las bananas posibles.

              Pulsa "space" para iniciar el juego
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent logo_OB_intro
      image = logo_OB.png
      pos = (0.6, 0.6)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent Adios
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = ¡Muchas gracias por participar!
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    CodeComponent code_4
      Code Type = Both
      End JS Routine:
        const average = list => list.reduce((prev, curr) => prev + curr) / list.length;
        const list = speeds
        mean_speed = average(list)
        psychoJS.experiment.addData('mean_speed', mean_speed)


        max_speed = Math.max.apply(Math, speeds)
        psychoJS.experiment.addData('max_speed', max_speed.toString())


        number_trials_done = trials_done.length
        psychoJS.experiment.addData('number_trials', number_trials_done)


        const sumas = list2 => list2.reduce((prev, curr) => prev + curr);
        const list2 = trials_done
        number_trials_correct = sumas(list2)
        psychoJS.experiment.addData('number_trials_correct', number_trials_correct)
      End Routine:
        import numpy as np

        mean_speed = np.mean(speeds_) ##mean speed -->the larger the better
        max_speed = np.max(speeds_)
        number_trials_done = len(trials_done) ##number of trials
        number_trials_correct = np.sum(trials_done)  ##number corrects

        thisExp.addData('mean_speed', mean_speed)
        thisExp.addData('max_speed', max_speed)
        thisExp.addData('number_trials', number_trials_done)
        thisExp.addData('number_trials_correct', number_trials_correct)
    ImageComponent logo_ob_fin
      image = logo_OB.png
      pos = (0.6, 0.6)
      size = (0.2, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine title
    ImageComponent image
      image = imagenes/Title.png
      ori [set every frame] = $spin
      size [set every frame] = $(TitleW, TitleH)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        spin = 0
        TitleW = 0
        TitleH = 0
      Begin JS Experiment:
        spin = 0
        TitleW = 0
        TitleH = 0
      Each Frame:
        #spin the title 360 degrees at a rate of 4 unite per frame#
        if spin < 360:
            spin = spin + 4
        else:
            spin = 360

        #increase the width of the title by 0.05 units per frame until it reaches 1.5#
        if TitleW < 1.5:
            TitleW = TitleW + 0.05
        else:
            TitleW = 1.5

        #increase the height of the title by 0.02 units per frame until it reaches 0.6#
        if TitleH < 0.6:
            TitleH = TitleH+ 0.02
        else:
            TitleH = 0.6
      Each JS Frame:
        if ((spin < 360)) {
            spin = (spin + 4);
        } else {
            spin = 360;
        }
        if ((TitleW < 1.5)) {
            TitleW = (TitleW + 0.05);
        } else {
            TitleW = 1.5;
        }
        if ((TitleH < 0.6)) {
            TitleH = (TitleH + 0.02);
        } else {
            TitleH = 0.6;
        }
    SoundComponent monkey_sound
      sound = monkeys_sound.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine repeat_
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        ¿Quieres continuar?

                SÍ: pulsa "S"

                NO: pulsa "N"
    KeyboardComponent si
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent no
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Each Frame:
        if no.keys == "n":
            repeat.finished = True
      Each JS Frame:
        if ((no.keys === 'N')) {
        currentLoop.finished = true;
        }


        if ((no.keys === 'n')) {
        currentLoop.finished = true;
        }
  Routine feedback_2
    TextComponent feedback_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every frame]:
        ¡Sigue así!
    SoundComponent level_up_sound
      sound = level_up.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent velo
      color = red
      letterHeight = 0.12
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $'velocidad =' +str(SPEED_SHOW) +'Km/h' 
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  Routine valoracion
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        ¿Te ha parecido un juego divertido?

                Puntúalo del 0 al 5

                0: muy aburrido
                5: muy divertido

        Pulsa en el teclado ese número para terminar
    KeyboardComponent valoracion_resp
      allowedKeys = '0','1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine title
  Routine Instructions
  LoopInitiator repeat loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 15
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      Routine Game
    LoopTerminator trials
    Routine feedback_2
    Routine repeat_
  LoopTerminator repeat
  Routine valoracion
  Routine End
