PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Edad': 'f"{randint(0, 999999):06.0f}"', 'Sexo': "['Hombre', 'Mujer', 'Otro']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = tarea_iceberg
  keyboardBackend = ioHub
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Routines
  Routine control
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    KeyboardComponent resp_control
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    ImageComponent MAR1
      image = imgs/MAR.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.3, 0.3)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine final
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = ¡Muchas gracias por participar!
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    CodeComponent code_3
      Code Type = JS
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      Begin JS Routine:
        musica_letra.stop();
  Routine instructions
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    TextComponent text_5
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        En este experiemento te verás en el mar...

        ¡Pero hay icebergs que aparecerán de repente en pantalla!

        Cuando veas uno, debes pulsar "SPACE" lo más rápido posible.

        Hay 4 rondas con características distintas.

        Cuando lo tengas claro, pulsa "SPACE"
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine portada
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    ImageComponent image_5
      image = imgs/logo_OB.png
      size = (0.6, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = ¡Bienvenido a un experimento de Open Brains!
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  Routine Ronda_4
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Ronda 4/4
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        selectedRows = random.sample(range(totalRows), nRows)
        selectedRowsStr_r4 = [i for i in selectedRows]
  Routine instrumental
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    KeyboardComponent resp_inst
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    ImageComponent MAR2
      image = imgs/MAR.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.3, 0.3)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine lyrics
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    KeyboardComponent resp_lyrics
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    ImageComponent MAR3
      image = imgs/MAR.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.3, 0.3)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine Ronda4
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    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        let selectedRows = sample(allRows, nRows);
        selectedRowsStr4 = [];  // crea la variable vacía
        selectedRowsStr4 = selectedRows.slice();
      End JS Routine:
        globalClock = new util.Clock();  // Inicia el reloj global

        tiempos_aparicion = {
            "avion": globalClock.getTime() + 11,
            "gaviota": globalClock.getTime() + 34,
            "barco": globalClock.getTime() + 16,
            "pato": globalClock.getTime() + 29,
            "delfin": globalClock.getTime() + 40,
            "texto1": globalClock.getTime() + 3,
            "texto2": globalClock.getTime() + 20
        };
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Ronda 4/4

        Pulsa "SPACE" para empezar
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ronda3
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Ronda 3/4

        Pulsa "SPACE" para empezar
    CodeComponent code_16
      Code Type = JS
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      Begin JS Routine:
        let selectedRows = sample(allRows, nRows);
        selectedRowsStr3 = [];  // crea la variable vacía
        selectedRowsStr3 = selectedRows.slice();

        musica_instrumental.stop();
    SoundComponent musica_letra
      sound = imgs/titanic_spanish.wav
      startVal [time (s)] = 0.0
      stopWithRoutine = False
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ronda2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Ronda 2/4

        Pulsa "SPACE" para empezar
    CodeComponent code_15
      Code Type = JS
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      Begin JS Routine:
        let selectedRows = sample(allRows, nRows);
        selectedRowsStr2 = [];  // crea la variable vacía
        selectedRowsStr2 = selectedRows.slice();
    SoundComponent musica_instrumental
      sound = imgs/song_titanic.wav
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ronda1
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Ronda 1/4

        Pulsa "SPACE" para empezar
    CodeComponent codigos_generales
      Code Type = JS
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      Before JS Experiment:
        let nRows = 10;
        let totalRows = 195;

        function sample(array, n) {
            let shuffled = array.slice();
            for (let i = shuffled.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [shuffled[i], shuffled[j]] = [shuffled[j], shuffled[i]];
            }
            return shuffled.slice(0, n);
        }

        // Crear un array de 0 a totalRows - 1
        let allRows = [];
        for (let i = 0; i < totalRows; i++) {
            allRows.push(i);
        }
      Begin JS Routine:
        let selectedRows = sample(allRows, nRows);
        selectedRowsStr1 = [];  // crea la variable vacía
        selectedRowsStr1 = selectedRows.slice();
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine multitasking
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    KeyboardComponent resp_musicv_r1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    ImageComponent MAR4
      image = imgs/MAR.jpg
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.3, 0.3)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    TextComponent texto1
      letterHeight = 0.03
      pos = (0, -0.22)
      startVal [time (s)] = $inicio_texto1
      text [set every repeat] = El Titanic fue un transatlántico británico que se hundió en el Atlántico Norte el 15 de abril de 1912 tras chocar contra un iceberg en su viaje inaugural. Se convirtió en uno de los desastres marítimos más famosos de la historia, con más de 1.500 víctimas.
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    ImageComponent gaviota
      image [set every repeat] = imgs/gaviota.png
      pos = (0.4, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = $inicio_gaviota
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    ImageComponent barco
      image [set every repeat] = imgs/barco.png
      pos = (-0.4, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = $inicio_barco  
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    ImageComponent delfin
      image [set every repeat] = imgs/delfin.png
      pos = (0.6, -0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = $inicio_delfin
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    ImageComponent avion
      image [set every repeat] = imgs/avion.png
      pos = (-0.2, 0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = $inicio_avion
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    ImageComponent pato
      image [set every repeat] = imgs/pato.png
      pos = (-0.7, -0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = $inicio_pato
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    TextComponent texto2
      letterHeight = 0.03
      pos = (0, -0.37)
      startVal [time (s)] = $inicio_texto2
      text [set every repeat] = El Titanic fue el barco más grande y lujoso de su época, construido por la compañía White Star Line. Por desgracia, solo contaba con botes salvavidas para la mitad de los pasajeros, ya que se priorizó la estética sobre la seguridad.
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    CodeComponent code_2
      Code Type = JS
      Begin JS Experiment:
        imagenes_mostradas = {
            "avion": false,
            "gaviota": false,
            "barco": false,
            "pato": false,
            "delfin": false,
            "texto1": false,
            "texto2": false
        };
      Begin JS Routine:
        let t_actual = globalClock.getTime();

        inicio_avion = imagenes_mostradas["avion"] ? 0 : Math.max(0, tiempos_aparicion["avion"] - t_actual);
        inicio_gaviota = imagenes_mostradas["gaviota"] ? 0 : Math.max(0, tiempos_aparicion["gaviota"] - t_actual);
        inicio_barco = imagenes_mostradas["barco"] ? 0 : Math.max(0, tiempos_aparicion["barco"] - t_actual);
        inicio_pato = imagenes_mostradas["pato"] ? 0 : Math.max(0, tiempos_aparicion["pato"] - t_actual);
        inicio_delfin = imagenes_mostradas["delfin"] ? 0 : Math.max(0, tiempos_aparicion["delfin"] - t_actual);
        inicio_texto1 = imagenes_mostradas["texto1"] ? 0 : Math.max(0, tiempos_aparicion["texto1"] - t_actual);
        inicio_texto2 = imagenes_mostradas["texto2"] ? 0 : Math.max(0, tiempos_aparicion["texto2"] - t_actual);
      Each JS Frame:
        let t_actual = globalClock.getTime();

        if (t_actual >= tiempos_aparicion["avion"]) {
            imagenes_mostradas["avion"] = true;
        }
        if (t_actual >= tiempos_aparicion["gaviota"]) {
            imagenes_mostradas["gaviota"] = true;
        }
        if (t_actual >= tiempos_aparicion["barco"]) {
            imagenes_mostradas["barco"] = true;
        }
        if (t_actual >= tiempos_aparicion["pato"]) {
            imagenes_mostradas["pato"] = true;
        }
        if (t_actual >= tiempos_aparicion["delfin"]) {
            imagenes_mostradas["delfin"] = true;
        }
        if (t_actual >= tiempos_aparicion["texto1"]) {
            imagenes_mostradas["texto1"] = true;
        }
        if (t_actual >= tiempos_aparicion["texto2"]) {
            imagenes_mostradas["texto2"] = true;
        }
  Routine distractors
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    ImageComponent image_6
      image = imgs/avion.png
      size = (0.5, 0.5)
      startVal [time (s)] = 10
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Flow
  Routine portada
  Routine instructions
  Routine Ronda1
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $selectedRowsStr1
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'timepresentation': 3, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 4, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 5, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 6, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 7, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 8, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 9, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 10, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 11, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 12, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 13, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 14, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 15, 'posx': -0.7, 'posy': 0.05},
      {'timepresentation': 3, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 4, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 5, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 6, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 7, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 8, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 9, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 10, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 11, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 12, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 13, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 14, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 15, 'posx': -0.6, 'posy': 0.05},
      {'timepresentation': 3, 'posx': -0.5, 'posy': 0.05},
      {'timepresentation': 4, 'posx': -0.5, 'posy': 0.05},
      {'timepresentation': 5, 'posx': -0.5, 'posy': 0.05}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
    Routine control
  LoopTerminator trials
  Routine Ronda2
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = $selectedRowsStr2
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine instrumental
  LoopTerminator trials_2
  Routine Ronda3
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = $selectedRowsStr3
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine lyrics
  LoopTerminator trials_3
  Routine Ronda4
  LoopInitiator trials_4 loopType="TrialHandler"
    Selected rows = $selectedRowsStr4
    conditionsFile = imgs/iceberg_times.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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    Routine multitasking
  LoopTerminator trials_4
  Routine final
