PsychoPy2experiment version="3.2.3"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'order': "['random', 1, 2]", 'session': '001', 'gender': "['male', 'female', 'other']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = IAT-1.4
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = +
      units = height
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    ImageComponent image_stim
      image [set every repeat] = $stimImage
      size = [0.5, 0.5]
      startVal [time (s)] = 0.5
      units = height
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    TextComponent text_stim
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimWord
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    MouseComponent touch_resp
      clickable = button_left, button_right
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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    CodeComponent check_correct
      Code Type = Both
      End JS Routine:
        // check if correct (either mouse or keyboard)
        if (key_resp.keys !== undefined) {
            corr = key_resp.corr;
            rt = key_resp.rt;
        } else {
            rt = touch_resp.time[0];  // annoyingly mouse is a list of rts
            if ((touch_resp.clicked_name[0].includes('left') && CorrAns=='a') ||
                (touch_resp.clicked_name[0].includes('right') && CorrAns=='l')) {
                corr = 1;
            } else {
                corr = 0;
            }
        }

        psychoJS.experiment.addData('rt',  rt);
        psychoJS.experiment.addData('corr', corr);
      End Routine:
        # check if correct (either mouse or keyboard)
        if key_resp.keys:
            corr = key_resp.corr
            rt = key_resp.rt
        else:
            rt = touch_resp.time[0]  # annoyingly mouse is a list of rts
            if (('left' in touch_resp.clicked_name[0] and CorrAns=='a') or
                ('right' in touch_resp.clicked_name[0] and CorrAns=='l')):
                corr = 1
            else:
                corr = 0

        thisExp.addData('rt',  rt)
        thisExp.addData('corr', corr)
    PolygonComponent button_left
      fillColor = orange
      lineColor = orange
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.5
      units = height
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    TextComponent trial_label_left
      color = black
      letterHeight = 0.05
      pos = [-0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_left
      units = height
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    PolygonComponent button_right
      fillColor = orange
      lineColor = orange
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.5
      units = height
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    TextComponent trial_label_right
      color = black
      letterHeight = 0.05
      pos = [0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $label_right
      units = height
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    ImageComponent logo_OB_trial
      image = logo_OB.png
      pos = (0.7, 0.35)
      size = (0.15, 0.13)
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent generate_msg
      Code Type = Auto->JS
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      Begin Routine:
        if corr==0:
            msg="oops"
        else:
            msg="+"
    TextComponent feedback_msg
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
      units = height
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    ImageComponent logo_OB_feedback
      image = logo_OB.png
      pos = (0.7, 0.35)
      size = (0.15, 0.13)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine ready
    TextComponent main_ready_msg
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Fíjate en las categorías que se indican abajo.

        Pon tus ínidices encima de la A y la L

        Pulsa la barra de espacio para empezar.
    PolygonComponent button_L
      fillColor = orange
      lineColor = orange
      pos = (-0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent ready_label_L
      color = black
      letterHeight = 0.05
      pos = [-0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_left
      units = height
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    PolygonComponent button_R
      fillColor = orange
      lineColor = orange
      pos = (0.4, -0.3)
      shape = rectangle
      size = (0.4, 0.3)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent ready_label_R
      color = black
      letterHeight = 0.05
      pos = [0.4, -0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $label_right
      units = height
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    MouseComponent ready_done_mouse
      clickable = button_L, button_R
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent ready_done
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent logo_OB_ready
      image = logo_OB.png
      pos = (0.7, 0.35)
      size = (0.15, 0.13)
      startVal [time (s)] = 0.0
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  Routine end_thanks
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = height
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      text:
        Fin

        ¡Muchas gracias por participar! :)
    ImageComponent logo_OB_end
      image = logo_OB.png
      pos = (0.7, 0.35)
      size = (0.15, 0.13)
      startVal [time (s)] = 0.0
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  Routine keep_in_mind
    TextComponent keep_in_mind_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
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      text:
        Keep in mind:

        1) Labels at the top of the screen indicate which catogory goes with which key.

        2) Each word or image has a correct catogory classification

        3) Keep your index fingers on the A and L keys to enable a rapid response.

        4) The test gives no results if you go slow- please try to go as fast as possible
    KeyboardComponent keep_in_mind_done
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent keep_in_btn
      fillColor = lightgreen
      lineColor = darkgreen
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent keep_in_label
      color = darkgreen
      letterHeight = 0.08
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Next...
      units = height
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    MouseComponent mouse
      clickable = keep_in_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent set_block_order
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['order']=='random':
            expInfo['order'] = randint(1,2)

        blocks_file = "blocks_order"+str(expInfo['order'])+".xlsx"
    TextComponent instructs_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_text
      units = height
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    KeyboardComponent instruct_done
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent instr_done_button
      fillColor = orange
      lineColor = orange
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent instr_done_label
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Siguiente
      units = height
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    MouseComponent instr_done_touch
      clickable = instr_done_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent logo_OB
      image = logo_OB.png
      pos = (0.7, 0.35)
      size = (0.15, 0.13)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator instruct_pages loopType="TrialHandler"
    conditionsFile = instructs.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator instruct_pages
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocks_file
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $conds_file
      loopType = random
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine end_thanks
