PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop_task
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Routines
  Routine color_negro
    TextComponent colores1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.05
      text [set every repeat] = $texto
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    KeyboardComponent respuesta
      allowedKeys = 'a','v','n','l'
      correctAns = $answer
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_1
      Code Type = Both
      Each Frame:
        if respuesta_rect.keys: # ie if the list isn't empty:
            if respuesta_rect.keys[-1] != answer: # check the latest response
                continueRoutine = True
            elif respuesta_rect.keys[-1] == answer: # check the latest response
                continueRoutine = False #"
      Each JS Frame:
        if (respuesta_rect.keys) {
          if (respuesta_rect.keys.slice(-1)[0] !== answer) {
            continueRoutine = true;
          } else {
            if (respuesta_rect.keys.slice(-1)[0] === answer) {
              continueRoutine = false;
            }
          }
        }
  Routine color_rectangulo
    PolygonComponent rectangulo
      fillColor [set every repeat] = $[farber, farbeg, farbeb]
      lineColor [set every repeat] = $[farber, farbeg, farbeb]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.05
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    KeyboardComponent respuesta_rect
      allowedKeys = 'a','v','n','l'
      correctAns = $answer
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Both
      Each Frame:
        if respuesta_rect.keys: # ie if the list isn't empty:
            if respuesta_rect.keys[-1] != answer: # check the latest response
                continueRoutine = True
            elif respuesta_rect.keys[-1] == answer: # check the latest response
                continueRoutine = False #"
      Each JS Frame:
        if (respuesta_rect.keys) {
          if (respuesta_rect.keys.slice(-1)[0] !== answer) {
            continueRoutine = true;
          } else {
            if (respuesta_rect.keys.slice(-1)[0] === answer) {
              continueRoutine = false;
            }
          }
        }
  Routine color_variado
    TextComponent colores2
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.05
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      text [set every repeat]:
        $texto
    KeyboardComponent respuesta_mix
      allowedKeys = 'a','v','n','l'
      correctAns = $answer
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Both
      Each Frame:
        if respuesta_mix.keys: # ie if the list isn't empty:
            if respuesta_mix.keys[-1] != answer: # check the latest response
                continueRoutine = True
            elif respuesta_mix.keys[-1] == answer: # check the latest response
                continueRoutine = False #"
      Each JS Frame:
        if (respuesta_rect.keys) {
          if (respuesta_rect.keys.slice(-1)[0] !== answer) {
            continueRoutine = true;
          } else {
            if (respuesta_rect.keys.slice(-1)[0] === answer) {
              continueRoutine = false;
            }
          }
        }
  Routine Instrucciones
    TextComponent Instrucciones_texto
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        En esta tarea, tendrás que responder lo más rápido que puedas.

        Presiona "a" si la palabra es "azul"
        Presiona "v" si la palabra es "verde"
        Presiona "n" si la palabra es "naranja"
        Presiona "l" si la palabra es "lila"


        Para hacerlo la más rápido posible, mantén siempre un dedo encima de cada letra.

        Cuando quieras, presiona "space"
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 6
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  Routine instrucciones_2
    TextComponent text_intructionses2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Ahora tendrás que indicar el color del cuadrado.

        Presiona "a" si es de color "azul"
        Presiona "v" si es de color "verde"
        Presiona "n" si es de color "naranja"
        Presiona "l" si es de color "lila"


        Para hacerlo la más rápido posible, mantén siempre un dedo encima de cada letra.

        Cuando estés listo, presiona "space"
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine instrucciones_3
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Finalmente,

        tendrás que indicar de qué color está escrita la palabra.

        Presiona "a" si la palabra está escrita en color "azul"
        Presiona "v" si la palabra está escrita en color "verde"
        Presiona "n" si la palabra está escrita en color "naranja"
        Presiona "l" si la palabra está escrita en color "lila"


        Para hacerlo la más rápido posible, mantén siempre un dedo encima de cada letra.

        Cuando estés listo, presiona "space"
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine gracias
    TextComponent despedida
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ¡Muchas gracias por participar!
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Flow
  Routine Instrucciones
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 1:38
    conditionsFile = colores1_negro.xlsx
    loopType = random
    nReps = 1
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    Routine color_negro
  LoopTerminator trials
  Routine instrucciones_2
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 1:38
    conditionsFile = colores2_rectangulos.xlsx
    loopType = random
    nReps = 1
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    Routine color_rectangulo
  LoopTerminator trials_2
  Routine instrucciones_3
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 1:38
    conditionsFile = colores3_mix.xlsx
    loopType = random
    nReps = 1
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    Routine color_variado
  LoopTerminator trials_3
  Routine gracias
