PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $imagen1
      pos = (-0.5, 0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $imagen2
      pos = (0.5, 0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        hm=[]
        cp=[]
        ai=[]
        pa=[]
        vr=[]
        cl=[]

        hm_final = 0
        cp_final = 0
        ai_final = 0
        pa_final = 0
        vr_final = 0
        cl_final = 0

        hm_min = -8
        hm_max = 8
        cp_min = -40
        cp_max = 40
        ai_min = -40
        ai_max = 40
        pa_min = -8
        pa_max = 8
        vr_min= -40
        vr_max = 40
        cl_min= -8
        cl_max = 8


        #HMscoreText="HM = " + str(round(hm_final,2)) + "%";
        #CPscoreText="CP = " + str(round(cp_final,2)) + "%";
        #AIscoreText="AI = " + str(round(ai_final,2)) + "%";
        #PAscoreText="PA = " + str(round(pa_final,2)) + "%";
        #VRscoreText="VR = " + str(round(vr_final,2)) + "%";
        #CLscoreText="CL = " + str(round(cl_final,2)) + "%";
      Begin Routine:
        current_trial_data = trials.trialList[trials.thisIndex]

        hm_1=current_trial_data['hm1']
        cp_1=current_trial_data['cp1']
        ai_1=current_trial_data['ai1']
        pa_1=current_trial_data['pa1']
        vr_1=current_trial_data['vr1']
        cl_1=current_trial_data['cl1']


        hm_2=current_trial_data['hm2']
        cp_2=current_trial_data['cp2']
        ai_2=current_trial_data['ai2']
        pa_2=current_trial_data['pa2']
        vr_2=current_trial_data['vr2']
        cl_2=current_trial_data['cl2']
      Each Frame:
        if key_resp.keys=='left':
            hm.append(hm_1)
            cp.append(cp_1)
            ai.append(ai_1)
            pa.append(pa_1)
            vr.append(vr_1)
            cl.append(cl_1)


        if key_resp.keys=='right':
            hm.append(hm_2)
            cp.append(cp_2)
            ai.append(ai_2)
            pa.append(pa_2)
            vr.append(vr_2)
            cl.append(cl_2)
      End Routine:
        hm_final = (sum(hm) + hm_max)/ (hm_max-hm_min) * 100
        cp_final = (sum(cp) + cp_max)/ (cp_max-cp_min) * 100
        ai_final = (sum(ai) + ai_max)/ (ai_max-ai_min) * 100
        pa_final = (sum(pa) + pa_max)/ (pa_max-pa_min) * 100
        vr_final = (sum(vr) + vr_max)/ (vr_max-vr_min) * 100
        cl_final = (sum(cl) + cl_max)/ (cl_max-cl_min) * 100


        HMscoreText="Salvar hombres  vs mujeres = " + str(round(hm_final,2)) + "%";
        CPscoreText="Salvar conductor  vs peatón = " + str(round(cp_final,2)) + "%";
        AIscoreText="Dejar que el coche vaya recto = " + str(round(ai_final,2)) + "%";
        PAscoreText="Salvar personas  vs animales = " + str(round(pa_final,2)) + "%";
        VRscoreText="Salvar a quien respeta la ley = " + str(round(vr_final,2)) + "%";
        CLscoreText="Salvar a cívicos vs ladrones = " + str(round(cl_final,2)) + "%";
  Routine results
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $HMscoreText
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $CPscoreText
    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $AIscoreText
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text [set every repeat]:
        $PAscoreText
    TextComponent text_5
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $VRscoreText
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CLscoreText
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Para salir, pulsa "space"
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_coche.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\1.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\2.png'), ('hm1', 0), ('cp1', -1), ('ai1', 1), ('pa1', 0), ('vr1', 1), ('cl1', 0), ('hm2', 0), ('cp2', 1), ('ai2', -1), ('pa2', 0), ('vr2', -1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\3.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\4.png'), ('hm1', 0), ('cp1', -1), ('ai1', 1), ('pa1', 0), ('vr1', -1), ('cl1', 0), ('hm2', 0), ('cp2', 1), ('ai2', -1), ('pa2', 0), ('vr2', 1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\5.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\6.png'), ('hm1', 0), ('cp1', 1), ('ai1', 1), ('pa1', 0), ('vr1', -1), ('cl1', 0), ('hm2', 0), ('cp2', -1), ('ai2', -1), ('pa2', 0), ('vr2', 1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\7.png'), ('imagen2', 'C:\\Users\\david\\OneDrive\\Documentos\\GitHub\\OpenBrains\\coche_autonomo\\pngs\\8.png'), ('hm1', 0), ('cp1', 1), ('ai1', 1), ('pa1', 0), ('vr1', 1), ('cl1', 0), ('hm2', 0), ('cp2', -1), ('ai2', -1), ('pa2', 0), ('vr2', -1), ('cl2', 0)])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
    Routine trial
  LoopTerminator trials
  Routine results
