PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['pngs/1.png', 'pngs/2.png', 'pngs/3.png', 'pngs/4.png', 'pngs/5.png', 'pngs/6.png', 'pngs/7.png', 'pngs/8.png', 'pngs/9.png', 'pngs/10.png', 'pngs/11.png', 'pngs/12.png', 'pngs/13.png', 'pngs/14.png', 'pngs/15.png', 'pngs/16.png', 'pngs/17.png', 'pngs/18.png', 'pngs/19.png', 'pngs/20.png', 'pngs/21.png', 'pngs/22.png', 'pngs/23.png', 'pngs/24.png', 'pngs/25.png', 'pngs/26.png', 'pngs/27.png', 'pngs/28.png', 'pngs/29.png', 'pngs/30.png', 'pngs/31.png', 'pngs/32.png', 'pngs/33.png', 'pngs/34.png', 'pngs/35.png', 'pngs/36.png', 'pngs/37.png', 'pngs/38.png', 'pngs/39.png', 'pngs/40.png', 'pngs/41.png', 'pngs/42.png', 'pngs/43.png', 'pngs/44.png', 'pngs/45.png', 'pngs/46.png', 'pngs/47.png', 'pngs/48.png', 'pngs/49.png', 'pngs/50.png', 'pngs/51.png', 'pngs/52.png', 'pngs/53.png', 'pngs/54.png', 'pngs/55.png', 'pngs/56.png', 'pngs/57.png', 'pngs/58.png', 'pngs/59.png', 'pngs/60.png', 'pngs/61.png', 'pngs/62.png', 'pngs/63.png', 'pngs/64.png', 'pngs/65.png', 'pngs/66.png', 'pngs/67.png', 'pngs/68.png', 'pngs/69.png', 'pngs/70.png', 'pngs/71.png', 'pngs/72.png', 'pngs/73.png', 'pngs/74.png', 'pngs/75.png', 'pngs/76.png', 'pngs/77.png', 'pngs/78.png', 'pngs/79.png', 'pngs/80.png', 'pngs/animal.png', 'pngs/delincuente.png', 'pngs/hombre.png', 'pngs/mujer.png', 'pngs/peaton_rojo.png', 'pngs/peaton_verde.png', 'pngs/portada.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = tarea_coche_autonomo
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $imagen1
      pos = (-0.5, 0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $imagen2
      pos = (0.5, 0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        hm=[]
        cp=[]
        ai=[]
        pa=[]
        vr=[]
        cl=[]

        hm_final = 0
        cp_final = 0
        ai_final = 0
        pa_final = 0
        vr_final = 0
        cl_final = 0

        hm_min = -8
        hm_max = 8
        cp_min = -40
        cp_max = 40
        ai_min = -40
        ai_max = 40
        pa_min = -8
        pa_max = 8
        vr_min= -40
        vr_max = 40
        cl_min= -8
        cl_max = 8


        #HMscoreText="HM = " + str(round(hm_final,2)) + "%";
        #CPscoreText="CP = " + str(round(cp_final,2)) + "%";
        #AIscoreText="AI = " + str(round(ai_final,2)) + "%";
        #PAscoreText="PA = " + str(round(pa_final,2)) + "%";
        #VRscoreText="VR = " + str(round(vr_final,2)) + "%";
        #CLscoreText="CL = " + str(round(cl_final,2)) + "%";
      Begin Routine:
        current_trial_data = trials.trialList[trials.thisIndex]

        hm_1=current_trial_data['hm1']
        cp_1=current_trial_data['cp1']
        ai_1=current_trial_data['ai1']
        pa_1=current_trial_data['pa1']
        vr_1=current_trial_data['vr1']
        cl_1=current_trial_data['cl1']


        hm_2=current_trial_data['hm2']
        cp_2=current_trial_data['cp2']
        ai_2=current_trial_data['ai2']
        pa_2=current_trial_data['pa2']
        vr_2=current_trial_data['vr2']
        cl_2=current_trial_data['cl2']
      Each Frame:
        if key_resp.keys=='left':
            hm.append(hm_1)
            cp.append(cp_1)
            ai.append(ai_1)
            pa.append(pa_1)
            vr.append(vr_1)
            cl.append(cl_1)


        if key_resp.keys=='right':
            hm.append(hm_2)
            cp.append(cp_2)
            ai.append(ai_2)
            pa.append(pa_2)
            vr.append(vr_2)
            cl.append(cl_2)
      End Routine:
        hm_final = (sum(hm) + hm_max)/ (hm_max-hm_min) * 100
        cp_final = (sum(cp) + cp_max)/ (cp_max-cp_min) * 100
        ai_final = (sum(ai) + ai_max)/ (ai_max-ai_min) * 100
        pa_final = (sum(pa) + pa_max)/ (pa_max-pa_min) * 100
        vr_final = (sum(vr) + vr_max)/ (vr_max-vr_min) * 100
        cl_final = (sum(cl) + cl_max)/ (cl_max-cl_min) * 100


        HMscoreText="Salvar hombres antes que mujeres = " + str(round(hm_final,2)) + "%";
        CPscoreText="Salvar conductor antes que peatón = " + str(round(cp_final,2)) + "%";
        AIscoreText="Dejar que el coche vaya recto = " + str(round(ai_final,2)) + "%";
        PAscoreText="Salvar personas antes que animales = " + str(round(pa_final,2)) + "%";
        VRscoreText="Salvar a quien respeta la ley = " + str(round(vr_final,2)) + "%";
        CLscoreText="Salvar a cívicos antes que ladrones = " + str(round(cl_final,2)) + "%";
  Routine results
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    TextComponent text
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $HMscoreText
    TextComponent text_2
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $CPscoreText
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $AIscoreText
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text [set every repeat]:
        $PAscoreText
    TextComponent text_5
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $VRscoreText
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    TextComponent text_6
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CLscoreText
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    TextComponent text_7
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Para salir, pulsa "space"
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruccions
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    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        En este experimento, deberás elegir entre el escenario de la izquierda o el de la derecha. Para hacerlo, deberás usar las felchas de "izquierda" y "derecha" del teclado.

        Los escenarios presentan siempre a un coche autónomo que se encuentra ante un accidente inevitable. El coche debe decidir si el accidente causa el fallecimiento del integrante del vehículo o del peatón.

        En este experimente, dotarás al coche con tus propias reglas morales, pues serás tú quien decidirá qué hace el coche autónomo en cada caso.

        A continuación, te ponemos un ejemplo de escenario.

        Pulsa "space" para continuar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_2
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    ImageComponent image_3
      image = pngs/41.png
      pos = (-0.53, -0.1)
      size = (0.4, 0.8)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = pngs/42.png
      pos = (0.53, -0.1)
      size = (0.4, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        Pulsa la flecha "izquierda" o "derecha"
        para elegir uno de los escenarios.
        Es obligatorio elegir.
    TextComponent text_10
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = En el escenario de la izquierda, el coche va recto matando a un hombre. En el de la derecha, el coche gira matando a un perro que cruzaba en verde.
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  Routine instructions_3
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    TextComponent text_11
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Estos son los significados de los símbolos que te irás encontrando:
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    TextComponent text_12
      letterHeight = 0.04
      pos = (-0.5, 0.25)
      startVal [time (s)] = 0.0
      text = hombre
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    TextComponent text_13
      letterHeight = 0.04
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      text = mujer
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    TextComponent text_14
      letterHeight = 0.04
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text = delincuente
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    TextComponent text_15
      letterHeight = 0.04
      pos = (0.5, 0.25)
      startVal [time (s)] = 0.0
      text = animal
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    TextComponent text_16
      letterHeight = 0.04
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      text = peatón puede cruzar
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    TextComponent text_17
      letterHeight = 0.04
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      text = peatón no puede cruzar
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    ImageComponent image_5
      image = pngs/hombre.png
      pos = (-0.65, 0.25)
      size = (0.12, 0.12)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_18
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = ¡Pulsa "space" para empezar!
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    ImageComponent image_6
      image = pngs/mujer.png
      pos = (-0.7, 0)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image = pngs/delincuente.png
      pos = (-0.7, -0.25)
      size = (0.15, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image = pngs/animal.png
      pos = (0.3, 0.25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image = pngs/peaton_verde.png
      pos = (0.2, 0)
      size = (0.1, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent image_10
      image = pngs/peaton_rojo.png
      pos = (0.2, -0.25)
      size = (0.1, 0.15)
      startVal [time (s)] = 0.0
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  Routine Portada
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    ImageComponent image_11
      image = pngs/portada.jpg
      size = (2,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent text_19
      color = black
      letterHeight = 0.08
      pos = (-0.2, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Experimento del coche autónomo
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Flow
  Routine Portada
  Routine Instruccions
  Routine instructions_2
  Routine instructions_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials_coche3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imagen1', 'pngs\\1.png'), ('imagen2', 'pngs\\2.png'), ('hm1', 0), ('cp1', -1), ('ai1', 1), ('pa1', 0), ('vr1', 1), ('cl1', 0), ('hm2', 0), ('cp2', 1), ('ai2', -1), ('pa2', 0), ('vr2', -1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'pngs\\3.png'), ('imagen2', 'pngs\\4.png'), ('hm1', 0), ('cp1', -1), ('ai1', 1), ('pa1', 0), ('vr1', -1), ('cl1', 0), ('hm2', 0), ('cp2', 1), ('ai2', -1), ('pa2', 0), ('vr2', 1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'pngs\\5.png'), ('imagen2', 'pngs\\6.png'), ('hm1', 0), ('cp1', 1), ('ai1', 1), ('pa1', 0), ('vr1', -1), ('cl1', 0), ('hm2', 0), ('cp2', -1), ('ai2', -1), ('pa2', 0), ('vr2', 1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'pngs\\7.png'), ('imagen2', 'pngs\\8.png'), ('hm1', 0), ('cp1', 1), ('ai1', 1), ('pa1', 0), ('vr1', 1), ('cl1', 0), ('hm2', 0), ('cp2', -1), ('ai2', -1), ('pa2', 0), ('vr2', -1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'pngs\\9.png'), ('imagen2', 'pngs\\10.png'), ('hm1', 0), ('cp1', -1), ('ai1', 1), ('pa1', 0), ('vr1', 1), ('cl1', 0), ('hm2', 0), ('cp2', 1), ('ai2', -1), ('pa2', 0), ('vr2', -1), ('cl2', 0)]),
      OrderedDict([('imagen1', 'pngs\\11.png'), ('imagen2', 'pngs\\12.png'), ('hm1', 0), ('cp1', -1), ('ai1', 1), ('pa1', 0), ('vr1', -1), ('cl1', 0), ('hm2', 0), ('cp2', 1), ('ai2', -1), ('pa2', 0), ('vr2', 1), ('cl2', 0)])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
    Routine trial
  LoopTerminator trials
  Routine results
