PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['spreadsheets/balloons.xlsx', 'spreadsheets/trialTypes.xlsx', 'assets/bang.wav', 'assets/blueBalloon.png', 'assets/greenBalloon.png', 'assets/redBalloon.png', 'assets/bang.mp3']
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1.0000, 0.6157, 0.6392]
  expName = bart
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine trial
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    ImageComponent background_2
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent bankButton
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        bankedEarnings=0.0
        totalPumps=0.0
        balloonEarnings = ''
        bankedText = ''
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Begin Routine:
        thisBalloonEarnings=(pump.thisN)*0.05
        balloonEarnings = "Valor d'aquest globus:\n€" + str(round(thisBalloonEarnings, 2))
        bankedText = "Has guanyat:\n€" + str(round(bankedEarnings, 2))
      End Routine:
        #calculate cash 'earned'
        if pump.thisN + 1 == maxPumps:
            popped = True
        else:
            popped = False

        # if balloon popped reset the earnings
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:
            lastBalloonEarnings=thisBalloonEarnings

        if 'return' in bankButton.keys:
            pump.finished = True
    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Premeu ESPAI per bombar el globus
        Premeu ENTER per posar al banc l'efectiu d'aquest globus i passar al següent
    TextboxComponent balloonValTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $balloonEarnings
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    TextboxComponent bankedTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $bankedText
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    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonBody.setPos([0, balloonSize/2-.5])
        balloonBody.setSize(balloonSize)
      Each Frame:
        balloonSize=0.1+(pump.thisN+1)*0.015
      End Routine:
        #save data
        trials.addData('nPumps', pump.thisN)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    ImageComponent balloonBody
      image = assets/redBalloon.png
      ori = -90
      pos [set every frame] = [0, balloonSize/2-.5]
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    TextboxComponent trialcount
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Globus número: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine finalScore
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    ImageComponent background_4
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    CodeComponent finalScoreCode
      Code Type = Auto->JS
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      Begin Routine:
        scoreText="Has guanyat un total de\n" + str(round(bankedEarnings,2)) + "€";
        #balloonEarnings = "Valor d'aquest globus:\n€" + str(round(thisBalloonEarnings, 2))
        scoreText2="Has fet un total de\n" + str(int(totalPumps)) + " bombeigs";

        totalPumps
    TextboxComponent scoremsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      pos = (0, 0.2)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $scoreText
    TextboxComponent scoremsg_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      pos = (0, -0.2)
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $scoreText2
  Routine feedback
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    ImageComponent background_3
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
      Begin Routine:
        # track the banked earnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings

        # track the total amount of pumps
        totalPumps = totalPumps+(pump.thisN-1)


        #update the text
        balloonEarnings = "Valor d'aquest globus:\n€" + str(round(thisBalloonEarnings, 2))
        bankedText = "Has guanyat:\n€" + str(round(bankedEarnings, 2))

        pop_sound.setVolume(1)

        # play the pop sound
        if popped==True:
          feedbackText="Ooooh! Has perdut aquest globus!"
          pop_sound.play()
        else:
          feedbackText="Has guanyat €" + str(round(lastBalloonEarnings, 2))
    TextboxComponent feedbacktxt
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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    TextboxComponent bankedTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $bankedText
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    TextboxComponent balloonValTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $balloonEarnings
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    TextboxComponent reminder_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Premeu ESPAI per bombar el globus
        Premeu ENTER per posar al banc l'efectiu d'aquest globus i passar al següent
    TextboxComponent trialcount_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Globus número: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine instructions
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    ImageComponent background
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instrtxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Aquest és un joc on has d'optimitzar els teus guanys en una competició d'inflar globus.

        Rebreu un premi en diners per cada globus que infleu segons la seva mida. Però si l'infleu massa (bombant el globus), el globus esclatarà i no obtindreu diners.

        Els globus es diferencien en la seva mida màxima: de vegades poden arribar a gairebé la mida de la pantalla, però la majoria explotarà molt abans.

        Premeu
            ESPAI per inflar el globus
            ENTER per posar al banc l'efectiu d'aquest globus i passar al següent

        Per començar l'experiement, premeu "ESPAI"
    SoundComponent pop_sound
      sound = assets/bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0
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  Routine reset_balloon
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = spreadsheets/conditions.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'maxPumps': 2},
      {'maxPumps': 8},
      {'maxPumps': 14},
      {'maxPumps': 20},
      {'maxPumps': 26}]
    Routine reset_balloon
    LoopInitiator pump loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = maxPumps
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      Routine trial
    LoopTerminator pump
    Routine feedback
  LoopTerminator trials
  Routine finalScore
